<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:bz="clr-namespace:BonZeb;assembly=BonZeb"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateFrame" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>EventArgs.Time</Selector>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Time</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateUniform">
          <gl:UniformName>switch_stim</gl:UniformName>
          <gl:ShaderName>OMR</gl:ShaderName>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>VideoAcquisition</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:CameraCapture">
                <cv:Index>0</cv:Index>
                <cv:CaptureProperties />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Grayscale" />
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>Image</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CalculateBackground</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Tab</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Image</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="bz:CalculateBackground">
                <bz:PixelSearch>Brightest</bz:PixelSearch>
                <bz:NoiseThreshold>0</bz:NoiseThreshold>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SkipUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Background</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>MultiAnimalTracking</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Image</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Background</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:AbsoluteDifference" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Threshold">
                <cv:ThresholdValue>70</cv:ThresholdValue>
                <cv:MaxValue>255</cv:MaxValue>
                <cv:ThresholdType>Binary</cv:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>External</cv:Mode>
                <cv:Method>ChainApproxNone</cv:Method>
                <cv:Offset>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Offset>
                <cv:MinArea>40</cv:MinArea>
                <cv:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Centroid" />
            </Expression>
            <Expression xsi:type="Condition">
              <Name>LeftQuarter</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>X</Selector>
                  </Expression>
                  <Expression xsi:type="LessThan">
                    <Operand xsi:type="FloatProperty">
                      <Value>250</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>-1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>RightQuarter</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>X</Selector>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="FloatProperty">
                      <Value>750</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Time</Name>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="DoubleProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>single(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateUniform">
                <gl:UniformName>phase</gl:UniformName>
                <gl:ShaderName>OMR</gl:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>TrackMultipleAnimals</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Centroid</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="CreateObservable">
                    <Name>CalculateTailPoints</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="bz:CalculateTailPoints">
                            <bz:DistTailBase>12</bz:DistTailBase>
                            <bz:HeadingDirection>-1</bz:HeadingDirection>
                            <bz:NumTailSegments>7</bz:NumTailSegments>
                            <bz:DistTailPoints>6</bz:DistTailPoints>
                            <bz:RangeTailPointAngles>150</bz:RangeTailPointAngles>
                            <bz:PixelSearchMethod>Brightest</bz:PixelSearchMethod>
                            <bz:OffsetX>0</bz:OffsetX>
                            <bz:OffsetY>0</bz:OffsetY>
                            <bz:TailPointCalculationMethod>PixelSearch</bz:TailPointCalculationMethod>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Points</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="scr:PythonTransform">
                    <scr:Script>import clr
clr.AddReference("OpenCV.Net")
clr.AddReference("System.Reactive.Core")
clr.AddReference("System.Reactive.Linq")
clr.AddReference("System.Reactive.PlatformServices")
from OpenCV.Net import Point2f
from System import IObservable, Array
from System.Reactive.Linq import Observable
from System.Reactive.Concurrency import TaskPoolScheduler

@returns(IObservable[Array[Point2f]])
def process(value):
  return Observable.SubscribeOn(value, TaskPoolScheduler.Default)</scr:Script>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToList" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="5" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="scr:PythonTransform">
              <scr:Script>import csv
import os
csv_writer = None
csv_file = None
filename = None

def unload():
  global filename, csv_file, csv_writer
  if filename is not None:
    filename = None
  if csv_file is not None:
    csv_file.close()
    csv_file = None
  if csv_writer is not None:
    csv_writer = None

@returns(bool)
def process(value):
  global filename, csv_file, csv_writer
  if filename is None:
    filename = "tracking_results.csv"
    csv_file = open(filename, 'wb')
    csv_writer = csv.writer(csv_file, delimiter = ',')
  n_fish_list = []
  for tail_points in value.Item1:
    tail_points_list = []
    for tail_point in tail_points:
      tail_points_list.append(str(tail_point))
    n_fish_list.append(str(tail_points_list))
  csv_writer.writerow(n_fish_list)
  return True</scr:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateUniform">
                <gl:UniformName>switch_stim</gl:UniformName>
                <gl:ShaderName>OMR</gl:ShaderName>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="20" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="20" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="7" To="10" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="13" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="13" Label="Source2" />
            <Edge From="12" To="13" Label="Source3" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="16" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Timer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Background</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="TimeSpanProperty">
                <Value>PT0S</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT1M</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>